PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'randint(100, 999)'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = 186c experiment
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        This experiment will require you to have headphones, so please have them on.

        You will first have a few survey questions to answer. Please answer to the best of your ability!

        When you are ready, press "right arrow".
    KeyboardComponent intro_key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_code
      Code Type = Auto->JS
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      Before Experiment:
        # Datalogging
        import pandas as pd
        import os

        PATH_SRC = 'src'
        PATH_RESULT = 'experiment_data'
      Begin Experiment:
        # Declare number of training/trials beforehand
        NUM_TRAINING = 1            # max 6
        NUM_SAMPLES = 1             # max 2
        NUM_SIGNAL = 2              # max 16
        NUM_NOISE_SIMILAR = 1       # max 8
        NUM_NOISE_DIFFERENT = 1     # max 8
        NUM_TRIALS = NUM_SIGNAL + NUM_NOISE_SIMILAR + NUM_NOISE_DIFFERENT

        # Define PATHs
        PATH_FORM_LIST = os.path.join(PATH_SRC, '186c experiment survey form.csv')

        if os.name == 'nt':
            PATH_TRAINING_LIST = os.path.join(PATH_SRC, 'training_list win.csv')
        else:
            PATH_TRAINING_LIST = os.path.join(PATH_SRC, 'training_list.csv')
        PATH_TRAINING_AUDIO = 'audio'

        PATH_SAMPLE_LIST = os.path.join(PATH_SRC, 'sample_list.csv')
        PATH_SAMPLE_AUDIO = 'audio'

        if os.name == 'nt':
            PATH_TRIAL_LIST = os.path.join(PATH_SRC, 'trial_list win.csv')
        else:
            PATH_TRIAL_LIST = os.path.join(PATH_SRC, 'trial_list.csv')
        PATH_TRIAL_AUDIO = 'audio'

        PATH_FORM_DATA = os.path.join(PATH_RESULT, f'{expInfo["participant"]}_form.csv')
        PATH_EXPERIMENT_DATA = os.path.join(PATH_RESULT, f'{expInfo["participant"]}_data.csv')

        # Defines Participant's Condition
        isMono = expInfo['participant']

        # Initial Processing
        isMono = isMono % 2 == 1
        # Note: names in condition_list corresponds to the column names in csv
        condition_list = ['rhythmic', 'monotone']
        condition = condition_list[isMono]


        # Datalogging
        df = pd.DataFrame({'Signal': pd.Series(dtype='int'),
                           'Response': pd.Series(dtype='int'),
                           'Duration': pd.Series(dtype='float')})


        # Coding Test Realm
        #NUM_TRAINING = NUM_TRAINING if len(data.importConditions(PATH_TRAINING_LIST)) > NUM_TRAINING else len(data.importConditions(PATH_TRAINING_LIST))
  Routine presurvey_questions
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    CodeComponent survey_code
      Code Type = Auto->JS
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      Each Frame:
        if form.complete:
            survey_button.fillColor = 'blue'
            survey_button.color = 'white'
        else:
            survey_button.fillColor = 'white'
            survey_button.color = 'white'
      End Routine:
        form_data = form.getData()
        form_return = list()
        for item in form_data:
            form_return.append(item['response'])
        form_return.append(isMono)

        form_df = pd.DataFrame([form_return],
                               columns = ['n_languages',
                                          'lang_list',
                                          'prof_list',
                                          'sum_proficiency',
                                          'isMono'])
        form_df.to_csv(PATH_FORM_DATA)
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = $PATH_FORM_LIST
      Randomize = False
      Style = custom...
      Text Height = 0.03
      borderColor = transparent
      fillColor = white
      itemColor = black
      markerColor = black
      responseColor = black
      size = (1, 1)
      startVal [time (s)] = 3
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    ButtonComponent survey_button
      bold = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -.45)
      size = (0.2, 0.1)
      startVal [time (s)] = 3
      text = Done!
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      callback:
        if form.complete:
            continueRoutine = False
    TextComponent survey_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Please answer the following presurvey questions!
  Routine training
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    CodeComponent training_code
      Code Type = Auto->JS
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      Begin Experiment:
        imported_training_list = data.importConditions(PATH_TRAINING_LIST)
        training_list = list()
        for item in imported_training_list:
                training_list.append(os.path.join(PATH_TRAINING_AUDIO, item[condition]))
        shuffle(training_list)
      Begin Routine:
        training_audio = training_list[training_loop.thisRepN]
        #training_audio = imported_training_list[training_loop.thisRepN]
    TextComponent training_fixation_1
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
      text = +
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    TextComponent training_fixation_2
      letterHeight = 0.04
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 3.5
      text = +
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    SoundComponent training_sound
      sound [set every repeat] = $training_audio
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        imported_trial_list = data.importConditions(PATH_TRIAL_LIST)
        trial_list = list()
        for item in imported_trial_list:
            trial_list.append((os.path.join(PATH_TRIAL_AUDIO, item["path"]), item["type"]))
        shuffle(trial_list)
      Begin Routine:
        trial_audio = trial_list[trial_loop.thisRepN][0]
      End Routine:
        new_row = pd.Series({'Signal': trial_list[trial_loop.thisRepN][1],
                             'Response': trial_kb.keys,
                             'Duration': trial_kb.rt})

        df = pd.concat([df, new_row.to_frame().T], ignore_index=True)
    SoundComponent trial_sound
      sound [set every repeat] = $trial_audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent trial_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = +
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    KeyboardComponent trial_kb
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 5
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    TextComponent trial_text
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 5.0
      text = Do you think this is the language you learned?
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  Routine conclusion
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    TextComponent conclusion_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        You've finished the task!

        Thank you for participating.
    CodeComponent conc_code
      Code Type = Auto->JS
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      Begin Routine:
        df.to_csv(PATH_EXPERIMENT_DATA)
  Routine training_instr
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    TextComponent training_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the first part, you will be listening to audio clips of an unspecified language. These audios will consist of short conversational phrases.

        Make sure to pay attention!

        Press "space" to start.
    KeyboardComponent training_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_trial
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    CodeComponent sample_code
      Code Type = Auto->JS
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      Begin Experiment:
        imported_sample_list = data.importConditions(PATH_SAMPLE_LIST)
        sample_list = list()
        for item in imported_sample_list:
            sample_list.append(os.path.join(PATH_SAMPLE_AUDIO, item["path"]))
      Begin Routine:
        sample_audio = sample_list[sample_loop.thisRepN]
    SoundComponent sample_sound
      sound [set every repeat] = $sample_audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent sample_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = +
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    KeyboardComponent sample_kb
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 5
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    TextComponent sample_text
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 5.0
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      text:
        Do you think this is the language you learned?

        (This is a sample)
  Routine sample_instr
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    TextComponent sample_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the second part, you will be listening to more audio clips.

        However, these audio clips will be muffled, and your task will be to identify if the played clip is the same language you heard in the first part.

        You will first be given a few sample clips to practice with.

        When it prompts you to answer, press key "1" to say yes and key "2" to say no.

        Press "space" to begin playing samples.
    KeyboardComponent sample_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instr
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    TextComponent trial_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now begins the actual task:

        You will be listening to more audio clips like the samples.

        Your task will be to identify if the played clip is the same language you heard in the first part.

        Remember, key "1" is for yes and key "2" is for no.

        Press "space" to begin.
    KeyboardComponent trial_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine presurvey_instr
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Flow
  Routine intro
  Routine presurvey_questions
  Routine training_instr
  LoopInitiator training_loop loopType="TrialHandler"
    loopType = random
    nReps = NUM_TRAINING
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    conditions:
      [OrderedDict([('Training_Audio', 'noise canto 2.mp3')]),
      OrderedDict([('Training_Audio', 'noise canto 3.mp3')])]
    Routine training
  LoopTerminator training_loop
  Routine sample_instr
  LoopInitiator sample_loop loopType="TrialHandler"
    loopType = random
    nReps = NUM_SAMPLES
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    Routine sample_trial
  LoopTerminator sample_loop
  Routine trial_instr
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = NUM_TRIALS
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    Routine trial
  LoopTerminator trial_loop
  Routine conclusion
